PsychoPy2experiment version="2021.3.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['jsQUEST.js']
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = demo_quest
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Routines
  Routine intro_trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        demo_quest

        This is a very basic demonstration of the QuestHandler in PsychoPy and PsychoJS. The QUEST staircases are configured via the conditions.xlsx file and then iterated over. On screen, all QUEST parameters are presented.

        Press spacebar to continue...
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_trial
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        window.cl = currentLoop;
        var s = currentLoop._currentStaircase;
        window.s = s;
        staircase_text.text =
          'staircase: ???' +
          '\nintensity: ' + currentLoop['intensity'] +
          '\ngetQuestValue(): ' + currentLoop._currentStaircase.getQuestValue() +
          '\nquestValue: ' + currentLoop._currentStaircase._questValue;

        // ttt
      Begin Routine:
        s = staircases.currentStaircase
        staircase_text.text = \
          'staircase: ' + s.condition['label'] + \
          '\n_nextIntensity: ' + str(round(s._nextIntensity, 3)) + \
          ', confInterval: [' + str(round(s.confInterval()[0], 3)) + ',' + str(round(s.confInterval()[1], 3)) + ']' + \
          '\nstartVal: ' + str(s.startVal) + ', ' + \
          'startValSd: ' + str(s.startValSd) + ', ' + \
          '\nnTrials: ' + str(s.nTrials) + ', ' \
          'stopInterval: ' + str(s.stopInterval) + ', ' + \
          'method: ' + str(s.method) + \
          '\nbeta: ' + str(s.beta) + ', ' + \
          'gamma: ' + str(s.gamma) + ', ' + \
          'delta: ' + str(s.delta) + ', ' + \
          'epsilon: ' + str(round(s.epsilon, 3)) + \
          '\ngrain: ' + str(s.grain) + ', ' \
          'range: ' + str(s.range)
        #  'pThreshold: ' + str(s.pThreshold) + \
    TextComponent key_text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Press arrow up to give a correct response or arrow down to give an incorrect response.
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    TextComponent staircase_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Placeholder text for staircase information
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = up
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine intro_trial
  LoopInitiator staircases loopType="MultiStairHandler"
    conditionsFile = sheets\conditions.xlsx
    loopType = interleaved staircases
    nReps = 50
    stairType = QUEST
    switchMethod = sequential
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    conditions:
      [{'label': 'staircase1', 'startVal': 0.2, 'startValSd': 0.1, 'pThreshold': 0.75, 'nTrials': 20, 'stopInterval': 0.2, 'method': 'quantile', 'beta': 3.7, 'gamma': 0.6, 'grain': 0.005, 'range': 0.5},
      {'label': 'staircase2', 'startVal': 0.2, 'startValSd': 0.1, 'pThreshold': 0.75, 'nTrials': 20, 'stopInterval': None, 'method': 'quantile', 'beta': None, 'gamma': 0.6, 'grain': 0.005, 'range': 0.5}]
    Routine main_trial
  LoopTerminator staircases
