PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sheet\\trials_main.xlsx', 'sheet\\trials_practice.xlsx', 'img\\post_block_rehearsal_sm.png', 'img\\aspect_ratio.png', 'img\\con_left.png', 'img\\con_right.png', 'img\\fb_correct_sm.png', 'img\\fb_incorrect1_sm.png', 'img\\fb_incorrect2_sm.png', 'img\\fb_none.png', 'img\\fb_too_fast1.png', 'img\\fb_too_fast2_sm.png', 'img\\fixation.png', 'img\\go_fullscreen.png', 'img\\inc_left.png', 'img\\inc_right.png', 'img\\post_block_halfway_sm.png', 'img\\post_block_main_sm.png', 'img\\quit.png', 'img\\request_fullscreen.png', 'img\\request_landscape.png', 'img\\request_portrait.png', 'img\\slide_0_sm.png', 'img\\slide_1_sm.png', 'img\\slide_2.png', 'img\\slide_3.png', 'img\\slide_4.png', 'img\\slide_5.png', 'img\\slide_6_sm.png', 'img\\slide_7_sm.jpg', 'img\\slide_8.png', 'img\\slide_9.png', 'img\\slide_10.png']
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = int_layout
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Routines
  Routine slideshow_trial
    MouseComponent slideshow_mouse
      clickable = slideshow_previous, slideshow_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ImageComponent slideshow_image
      image = None
      size = (1.6, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent slideshow_next
      fillColor = white
      lineWidth = 0
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent slideshow_previous
      fillColor = white
      lineWidth = 0
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent slideshow_code_m
      Code Type = JS
      Before JS Experiment:
        // Setup a layout
        var slideshowLayout;
        // Slideshow logic
        var slideshow;
        // Layout drawn? Then inform wdio about the button positions
        var layoutReady;
      Begin JS Experiment:
        // Setup a layout
        slideshowLayout = Layout.init(psychoJS,  [
          {stim: slideshow_previous, anchor: Layout.midLeft, pos: [0, -0.25], width: 0.3},
          {stim: slideshow_next, anchor: Layout.midRight, pos: [0, -0.25], width: 0.3},
          {stim: slideshow_image, anchor: Layout.top, pos: [0, -0.25]}
        ]);
        // Setup a slideshow
        slideshow = Slideshow.init(
            [
              "img/slide_0_" + deviceType + ".png",
              "img/slide_1_" + deviceType + ".png",
              "img/slide_2.png",
              "img/slide_3.png",
              "img/slide_4.png",
              "img/slide_5.png",
              "img/slide_6_" + deviceType + ".png",
              "img/slide_7_" + deviceType + ".jpg",
              "img/slide_8.png",
              "img/slide_9.png",
              "img/slide_10.png"
            ],
            slideshow_image,
            slideshow_previous
        );
        // Have we drawn the slideshow graphics?
        slideshowReady = false;
      Begin JS Routine:
        // Update the adaptive layout (if needed)
        slideshowLayout();
        slideshow.draw();
        document.body.setAttribute('data-report', 'slideshow_trial');
        // If we're running on keyboard, make slideshow_next and slideshow_previous transparent
        if (deviceType === 'kb') {
            slideshow_next.opacity = 0;
            slideshow_previous.opacity = 0;
        }
      Each JS Frame:
        // Update the adaptive layout (if needed)
        slideshowLayout();
        // Layout graphics weren't ready yet, but now they are;
        // inform any wdio tests where the left and right buttons are
        //if (!layoutReady) {
          document.body.setAttribute('data-info', JSON.stringify({
            'left_button': slideshow_previous.pos,
            'right_button': slideshow_next.pos
          }));
        //  layoutReady = true;
        //}
      End JS Routine:
        // Add current slide index and screen state
        psychoJS.experiment.addData('phase', 'slide_' + slideshow.currentSlide());
        psychoJS.experiment.addData('window_orientation', window.orientation === undefined? null: window.orientation);
        psychoJS.experiment.addData('screen_width', screen.width);
        psychoJS.experiment.addData('screen_height', screen.height);
        psychoJS.experiment.addData('window_innerWidth', window.innerWidth);
        psychoJS.experiment.addData('window_innerHeight', window.innerHeight);

        // Update slideshow
        if (deviceType === 'sm') {
            slideshow.update(slideshow_mouse.clicked_name[0]);
        } else if (deviceType === 'kb') {
            slideshow.update({
                's': 'slideshow_previous',
                'l': 'slideshow_next',
            }[slideshow_keyboard.keys]);
        }

        // Finish loop if we're done
        if (slideshow.done()) {
            // Update the slideshow
            slides.finished = true;
        }
    KeyboardComponent slideshow_keyboard
      allowedKeys = 's', 'l'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine load_modules_trial
    CodeComponent load_modules_code
      Code Type = JS
      Before JS Experiment:
        import * as Slideshow from './js/Slideshow.js';
        import * as Layout from './js/Layout.js';
        import * as ScreenMetrics from './js/ScreenMetrics.js';
        // Type of device we're administering the Flanker on (sm = smartphone, kb = keyboard)
        var deviceType = 'sm';
        // If rehearsing, give more extensive feedback
        var rehearsing;
        // Number of times each stimulus is replicated each block
        var nReps;
        // For informing e2e test it can start giving responses
        var layoutReady = false;
        // Conditions per block
        var conditionsFile;
      Begin JS Experiment:
        window.document.documentElement.style.overflow = 'hidden';
        window.psychoJS = psychoJS;
    TextComponent load_modules_text
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = One moment please...
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  Routine flanker_trial
    MouseComponent flanker_mouse
      clickable = flanker_left, flanker_right
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ImageComponent flanker_image
      image [set every repeat] = $stimulus
      size = (1.6, 0.5)
      startVal [time (s)] = soa
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    PolygonComponent flanker_left
      fillColor = white
      lineWidth = 0
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent flanker_right
      fillColor = white
      lineWidth = 0
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent flanker_fixation
      image = img/fixation.png
      size = (1.6, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent flanker_code
      Code Type = JS
      Before JS Experiment:
        var flankerLayout;
      Begin JS Experiment:
        flankerLayout = Layout.init(psychoJS, [
          {stim: flanker_left, anchor: Layout.midLeft, pos: [0, -0.25], width: 0.3},
          {stim: flanker_right, anchor: Layout.midRight, pos: [0, -0.25], width: 0.3},
          {stim: flanker_image, anchor: Layout.top, pos: [0, -0.25]},
          {stim: flanker_fixation, anchor: Layout.top, pos: [0, -0.25]}
        ]);
      Begin JS Routine:
        // Setup a layout
        document.body.setAttribute('data-report', 'flanker_trial');
        document.body.setAttribute('data-info', correct_response);
        flankerLayout();
        // If we're running on keyboard, make slideshow_next and slideshow_previous transparent
        if (deviceType === 'kb') {
            flanker_left.opacity = 0;
            flanker_right.opacity = 0;
        }
      Each JS Frame:
        flankerLayout();
    KeyboardComponent flanker_keyboard
      allowedKeys = 's', 'l'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_trial
    CodeComponent feedback_code
      Code Type = JS
      Before JS Experiment:
        // How long to wait before a response on the feedback is registered?
        var feedback_response_start;
      Begin JS Routine:
        // Setup a layout
        window.layout = Layout.init(psychoJS, [
          {stim: feedback_image1, anchor: Layout.top, pos: [0, -0.25]},
          {stim: feedback_image2, anchor: Layout.top, pos: [0, -0.25]},
        ]);
        // Determine feedback
        let response, rt;
        if (deviceType === 'sm') {
            response = flanker_mouse.clicked_name[0];
            rt = flanker_mouse.time;
        } else if (deviceType === 'kb') {
            response = {
                's': 'flanker_left',
                'l': 'flanker_right'
            }[flanker_keyboard.keys];
            rt = flanker_keyboard.time;
        }
        if (rt < soa) {
          feedback1 = 'img/fb_too_fast1.png';
          feedback2 = 'img/fb_too_fast2_' + deviceType + '.png';
          feedback_response_start = 1;
        } else if (response !== correct_response) {
          feedback1 = 'img/fb_incorrect1_' + deviceType + '.png';
          feedback2 = 'img/fb_incorrect2_' + deviceType + '.png';
          feedback_response_start = 1;
        } else {
          if (rehearsing) {
            feedback1 = 'img/fb_correct_' + deviceType + '.png';
            feedback2 = 'img/fb_correct_' + deviceType + '.png';
            feedback_response_start  = 0;
          } else {
            feedback1 = 'img/fb_none.png';
            feedback2 = 'img/fb_none.png';
            feedback_response_start  = 0;
          }
        }
        document.body.setAttribute('data-report', 'feedback_trial');
      Each JS Frame:
        if (feedback1 === 'img/fb_none.png') {
          continueRoutine = false;
        } else {
          window.layout();
        }
      End JS Routine:
        psychoJS.experiment.addData('phase', 'task');
        psychoJS.experiment.addData('window_orientation', window.orientation === undefined? null: window.orientation);
        psychoJS.experiment.addData('screen_width', screen.width);
        psychoJS.experiment.addData('screen_height', screen.height);
        psychoJS.experiment.addData('window_innerWidth', window.innerWidth);
        psychoJS.experiment.addData('window_innerHeight', window.innerHeight);
    MouseComponent feedback_mouse
      clickable = flanker_left, flanker_right
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = $feedback_response_start
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    ImageComponent feedback_image1
      image [set every repeat] = $feedback1
      size = (1.6, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent feedback_image2
      image [set every repeat] = $feedback2
      size = (1.6, 0.5)
      startVal [time (s)] = 0.8
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    KeyboardComponent feedback_keyboard
      allowedKeys = 's', 'l'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = $feedback_response_start
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  Routine pre_block_trial
    CodeComponent setup_block_code
      Code Type = JS
      Begin JS Routine:
        if (snapshot.thisN === 0) {
          rehearsing = true;
          nReps = 1;
          conditionsFile = "sheet/trials_practice.xlsx";
        } else {
          rehearsing = false;
          nReps = 4;
          conditionsFile = "sheet/trials_main.xlsx";
        }
  Routine post_block_trial
    CodeComponent post_block_code
      Code Type = JS
      Begin JS Routine:
        // Setup a layout
        window.layout = Layout.init(psychoJS, [
          {stim: post_block_image, anchor: Layout.top, pos: [0, -0.25]},
        ]);
        // Determine post-block slide
        if (snapshot.thisN === 0) {
          post_block = 'img/post_block_rehearsal_' + deviceType + '.png';
        } else if (snapshot.thisN === 1) {
            post_block = 'img/post_block_halfway_' + deviceType + '.png';
        } else {
            post_block = 'img/post_block_main_' + deviceType + '.png';
        }
      Each JS Frame:
        window.layout();
    MouseComponent post_block_mouse
      clickable = flanker_left, flanker_right
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    ImageComponent post_block_image
      image [set every repeat] = $post_block
      size = (1.6, 0.5)
      startVal [time (s)] = 1
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    KeyboardComponent post_block_keyboard
      allowedKeys = 's', 'l'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine fullscreen_trial
  Routine prepare_trial
    TextComponent text
      color = red
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
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    MouseComponent prepare_mouse
      clickable = quit, go_fullscreen
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent quit
      image = img\quit.png
      opacity = 0
      pos = (-0.25, -0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent go_fullscreen
      image = img\go_fullscreen.png
      opacity = 0
      pos = (0.25, -0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent request_landscape
      image = img/request_landscape.png
      opacity = 0
      size = (1, 1)
      startVal [time (s)] = 0.5
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    ImageComponent aspect_ratio
      image = img\aspect_ratio.png
      opacity = 0
      size = (1, 1)
      startVal [time (s)] = 0.5
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    ImageComponent request_fullscreen
      image = img\request_fullscreen.png
      opacity = 0
      size = (1, 1)
      startVal [time (s)] = 0.5
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    CodeComponent prepare_code
      Code Type = JS
      Before JS Experiment:
        var preparation_phase = 'landscape';
      Begin JS Routine:
        // Turn off all screen messages
        quit.opacity = 0;
        go_fullscreen.opacity = 0;
        request_landscape.opacity = 0;
        aspect_ratio.opacity = 0;
        request_fullscreen.opacity = 0;

        document.body.setAttribute('data-report', 'prepare_trial');
      Each JS Frame:
        // Turn off all screen messages
        quit.opacity = 0;
        go_fullscreen.opacity = 0;
        request_landscape.opacity = 0;
        aspect_ratio.opacity = 0;
        request_fullscreen.opacity = 0;

        // Check landscape
        if (!ScreenMetrics.isLandscape()) {
            request_landscape.opacity = 1;
            preparation_phase = 'landscape';
        } else if (ScreenMetrics.getScreenAspectRatio() < 1.6) {
            quit.opacity = 1;
            aspect_ratio.opacity = 1;
            preparation_phase = 'aspect_ratio';
        // No fullscreen check
        //} else if (!ScreenMetrics.isFullscreen()) {
        //    quit.opacity = 1;
        //    go_fullscreen.opacity = 1;
        //    request_fullscreen.opacity = 1;
        //    preparation_phase = 'fullscreen';
        //    if (!alerted) {
        //        alert(ScreenMetrics.getWindowAspectRatio() + ' ' + ScreenMetrics.getScreenAspectRatio());
        //        alerted = true;
        //    }
        } else {
            preparation_phase = 'ready';
            continueRoutine = false;
        }

        // Debug info into a text component
        //quit.opacity = 0;
        //go_fullscreen.opacity = 0;
        //request_landscape.opacity = 0;
        //aspect_ratio.opacity = 0;
        //request_fullscreen.opacity = 0;
        text.text = preparation_phase +
          ' ' + window.orientation +
          ' ' + window.innerWidth +
          ' ' + window.innerHeight +
          ' ' + screen.width +
          ' ' + screen.height;
      End JS Routine:
        // Store phase and screen state
        psychoJS.experiment.addData('phase', preparation_phase);
        psychoJS.experiment.addData('window_orientation', window.orientation === undefined? null: window.orientation);
        psychoJS.experiment.addData('screen_width', screen.width);
        psychoJS.experiment.addData('screen_height', screen.height);
        psychoJS.experiment.addData('window_innerWidth', window.innerWidth);
        psychoJS.experiment.addData('window_innerHeight', window.innerHeight);

        // quit; write data (current phase), then quit task
        if (
             (preparation_phase === 'aspect_ratio' || preparation_phase === 'fullscreen')
          && prepare_mouse.clicked_name[0] === 'quit'
        ) {
            psychoJS.experiment.nextEntry();
            quitPsychoJS('The [quit] button was pressed. Goodbye!', false)
        }

        // fullscreen; request fullscreen
        if (
             preparation_phase === 'fullscreen'
          && prepare_mouse.clicked_name[0] === 'go_fullscreen'
        ) {
            psychoJS.window.adjustScreenSize()
        }

        // we're ready; end loop
        if (preparation_phase === 'ready') {
            preparations.finished = true;
        }
Flow
  Routine load_modules_trial
  LoopInitiator preparations loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1000
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    Routine prepare_trial
  LoopTerminator preparations
  LoopInitiator slides loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine slideshow_trial
  LoopTerminator slides
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = sheet\blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'part': 'practice', 'conditionsFile': 'sheet/trials_practice.xlsx'},
      {'part': 'main1', 'conditionsFile': 'sheet/trials_main.xlsx'},
      {'part': 'main2', 'conditionsFile': 'sheet/trials_main.xlsx'}]
    Routine pre_block_trial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditionsFile
      loopType = fullRandom
      nReps = $nReps
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      Routine flanker_trial
      Routine feedback_trial
    LoopTerminator trials
    Routine post_block_trial
  LoopTerminator blocks
