PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = demo_jsQuest
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Routines
  Routine loading_trial
    CodeComponent loading_code
      Code Type = JS
      disabled = True
      Begin JS Experiment:
        /*
        // Download required JS files (in a style similar to including a JS script
        // into your HTML file)
        psychoJS.downloadResources([
          {name: 'interp1.js', path: 'js/interp1-1.0.13.umd.js'},
          {name: 'numeric.js', path: 'js/numeric-1.2.6.js'},
          {name: 'jsQUEST.js', path: 'js/jsQUEST-0.1.js'},
        ]);
        */
      Each JS Frame:
        /*
        // Here we check whether all files are downloaded (by checking if one of their
        // globals exists). If so, continue to the next routine.
        continueRoutine = !(
          window.hasOwnProperty('interp1') &&
          window.hasOwnProperty('numeric') &&
          window.hasOwnProperty('QuestCreate')
        );
        */
    TextComponent loading_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Downloading additional resources.

        One moment please...
  Routine demo_trial
    CodeComponent demo_code
      Code Type = JS
      Begin JS Routine:
        // Adapted from https://github.com/kurokida/jsQUEST/blob/v0.1/jsQuestDemo.html
        const tActual = -2
        const tGuess = -1
        const tGuessSd = 2
        const pThreshold = 0.82;
        const beta = 3.5;
        const delta = 0.01;
        const gamma = 0.5;
        const trialsDesired = 10;
        const wrongRight = ['wrong','right'];

        let q = jsQUEST.QuestCreate(tGuess, tGuessSd, pThreshold, beta, delta, gamma);
        let tTest, response;
        for (let k = 0; k < trialsDesired; k++){
            // % Get recommended level.  Choose your favorite algorithm.
            tTest = jsQUEST.QuestQuantile(q); // % Recommended by Pelli (1987), and still our favorite.
            // tTest=QuestMean(q);  // % Recommended by King-Smith et al. (1994)
            // tTest=QuestMode(q).mode;  // % Recommended by Watson & Pelli (1983)

            // % We are free to test any intensity we like, not necessarily what Quest suggested.
            // %  tTest=min(-0.05,max(-3,tTest)); % Restrict to range of log contrasts that our equipment can produce.

            // % Simulate a trial
            response = jsQUEST.QuestSimulate(q, tTest, tActual);
            console.log(`Trial ${k+1} at ${tTest} is  ${wrongRight[response]}`)

            // % Update the pdf
            q = jsQUEST.QuestUpdate(q, tTest, response); // % Add the new datum (actual test intensity and observer response) to the database.
        }

        // % Ask Quest for the final estimate of threshold.
        const myMean = jsQUEST.QuestMean(q); // % Recommended by Pelli (1989) and King-Smith et al. (1994). Still our favorite.
        const mySD = jsQUEST.QuestSd(q);
        console.log(`Final threshold estimate (mean+-sd) is ${myMean} +- ${mySD}`)
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = This routine reproduces the default jsQUEST demo. See the console for output.
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  Routine check_trial
    CodeComponent import_jsQUEST
      Code Type = JS
      Before JS Experiment:
        import * as jsQUEST from './js/jsQUEST.module.js';
        window.jsQUEST = jsQUEST;
    CodeComponent check_code
      Code Type = JS
      Begin JS Routine:
        // Adapted from https://github.com/psychopy/psychopy/blob/b5382a33852dccd16312b04a4a5d847c8579673d/psychopy/tests/test_data/test_StairHandlers.py#L436
        // Since the test above yielded infinities in the grain, I changed maxVal to 80
        const tGuess = 50
        const tGuessSd = 50
        const pThreshold = 0.82;
        const beta = 3.5;
        const delta = 0.01;
        const gamma = 0.5;
        const grain = 0.01;
        const range = 80;
        const responses = [1, 1, 0, 0, 1, 1, 0, 0, 1, 1]

        let q = jsQUEST.QuestCreate(tGuess, tGuessSd, pThreshold, beta, delta, gamma, grain, range);
        let tTest, response;
        for (let k = 0; k < responses.length; k++){
            tTest = jsQUEST.QuestQuantile(q);
            q = jsQUEST.QuestUpdate(q, tTest, responses[k]);
        }

        // % Ask Quest for the final estimate of threshold.
        const myMean = jsQUEST.QuestMean(q); // % Recommended by Pelli (1989) and King-Smith et al. (1994). Still our favorite.
        const mySD = jsQUEST. QuestSd(q);
        document.body.setAttribute('data-output', JSON.stringify([myMean, mySD]));
        document.body.setAttribute('data-report', 'check_trial');
      End JS Experiment:
        document.body.setAttribute('data-report', 'FINISHED');
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This routine is a test of jsQUEST output against PsychoPy's version. The mean and SD of a small simulation have been written to body.data-output (which are automatically checked via our WebDriverIO test).

        Click anywhere to finish the experiment...
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine loading_trial
  Routine check_trial
